// Description: Euler, NCC, ASGD
// Designed for semi-simultaneous registration of cardiac US images

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "LinearInterpolator")
(Metric "AdvancedNormalizedCorrelation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalLinearInterpolator")
(Resampler "DefaultResampler")
(Transform "EulerTransform")

(ErodeMask "true" )

(NumberOfResolutions 3)
(ImagePyramidSchedule 8 8 8 4 4 4 6 6 6)

(HowToCombineTransforms "Compose")
(AutomaticScalesEstimation "false")
(Scales 5.0)
(AutomaticTransformInitialization "true")

(WriteTransformParametersEachIteration "false")
(WriteResultImageAfterEachResolution "false") 
(ShowExactMetricValue "false")
(MaximumStepLength 5.0)

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 300 )

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(UseRandomSampleRegion "false")
(NumberOfSpatialSamples 5000 )
(NumberOfSamplesForExactGradient 25000)
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "false")
//(MaximumNumberOfSamplingAttempts 10)
//(RequiredRatioOfValidSamples 0.05)


//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

(WriteResultImage "false")


