// Description: affine, MI, ASGD

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "NormalizedMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")

(ErodeMask "true" )

(NumberOfResolutions 2)

(HowToCombineTransforms "Compose")
(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "GeometricalCenter")
(AutomaticScalesEstimation "true")


(WriteTransformParametersEachIteration "false")
(WriteResultImageAfterEachResolution "false") 
(ShowExactMetricValue "false")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 100 ) 

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomSparseMask")
(UseRandomSampleRegion "false")
(NumberOfSpatialSamples 2500 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)
(RequiredRatioOfValidSamples 0.15) 

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

(WriteResultImage "true")
(ResultImagePixelType "short")
(ResultImageFormat "mhd")

