// Description: Euler, NCC, ASGD
// Designed for semi-simultaneous registration of cardiac US images

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "LinearInterpolator")
(Metric "AdvancedNormalizedCorrelation")
(Optimizer "Powell")
(ResampleInterpolator "FinalLinearInterpolator")
(Resampler "DefaultResampler")
(Transform "EulerTransform")

(ErodeMask "false" )

(NumberOfResolutions 3)

(Scales 1)

(HowToCombineTransforms "Compose")
(AutomaticScalesEstimation "false")
(AutomaticTransformInitialization "true")

(WriteTransformParametersEachIteration "false")
(WriteResultImageAfterEachResolution "false")
(ShowExactMetricValue "false")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 1000 )

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "Random")
(UseRandomSampleRegion "false")
(NumberOfSpatialSamples 25000 )
(NumberOfSamplesForExactGradient 50000)
(NumberOfJacobianMeasurements 10000)
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)
(RequiredRatioOfValidSamples 0.001)


//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

(WriteResultImage "false")


